PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-1,-1,-1]
  expName = Test
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Routines
  Routine Feedback
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        import random

        nGam = str(nGamble)
        #convert to string

        GamblePercent = [20, 25, 30, 35, 40, 45, 50, 60, 65, 70, 75, 80, 85, 90, 95]
        randomGam = random.choice(GamblePercent)
        GamblePer = str(randomGam)
      Each Frame:
        import random

        nGam = str(nGamble)

        GamblePercent = [20, 25, 30, 35, 40, 45, 50, 60, 65, 70, 75, 80, 85, 90, 95]
        randomGam = random.choice(GamblePercent)
        GamblePer = str(randomGam)
    TextComponent endText
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.08
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $text2 + " told you to gamble x times."


        "You gambled " + $nGam + " times."


        "You won the gambles " + $GamblePer + "% of the time."


        "Please press enter to move on to the next block of trials."
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    ImageComponent ChoicePic
      image [set every repeat] = $Choice
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (1.3, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine Choice2Gain
    TextComponent blank
      color [set every repeat] = $[-1.000,-1.000,-1.000]
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.01
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = I
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    ImageComponent ChoicePic2
      image [set every repeat] = $Choice2
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (1.3, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent resp
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent checkL1
      color [set every repeat] = $[1,1,1]
      image [set every repeat] = check2.png
      mask [set every repeat] = None
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (2, 1)
      startVal [condition] = resp.keys == 'left'
      stopVal [duration (s)] = 1
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    ImageComponent checkR1
      color [set every repeat] = $[1,1,1]
      image [set every repeat] = check3.png
      mask [set every repeat] = None
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (2, 1)
      startVal [condition] = resp.keys == 'right'
      stopVal [duration (s)] = 1
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    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        from PIL import Image
        from psychopy import visual, core
      Each Frame:
        checkL1.autoLog=False
        checkR1.autoLog=False


        if resp.keys == 'left':
            checkL1.autoDraw=True

        #elif resp.keys == 'right':
         #   checkR1.autoDraw=False

        if resp.keys == 'right':
            checkR1.autoDraw=True


        if blank.status == FINISHED:
            checkR1.autoDraw=False
            checkL1.autoDraw=False
            continueRoutine=False
            #win.flip()


            #elif resp.keys == 'left':
         #   checkL1.autoDraw=False

        #clock = core.Clock()
        #while clock.getTime() < 2.0:
        #    if 0.5 <= clock.getTime() < 1.0:
         #       if checkL1.autoDraw==True:
          #          checkL1.setPhase(0.1, '+')
           #     elif checkR1.autoDraw==True:
            #        checkR1.setPhase(0.1, '+')
            #win.flip()
      End Routine:
        checkL1.autoLog=False
        checkR1.autoLog=False



        if resp.keys == 'left':
            checkL1.autoDraw=True

        #elif resp.keys == 'right':
         #   checkR1.autoDraw=False

        if resp.keys =='right':
            checkR1.autoDraw=True


        if blank.status == FINISHED:
            checkR1.autoDraw=False
            checkL1.autoDraw=False
            #win.flip()
        #elif resp.keys == 'left':
         #   checkL1.autoDraw=False


        #clock = core.Clock()
        #while clock.getTime() < 2.0:
         #   if 0.5 <= clock.getTime() < 1.0:
          #      if checkL1.autoDraw==True:
           #         checkL1.setPhase (0.1, '+')
            #    elif checkR1.autoDraw==True:
             #       checkR1.setPhase(0.1, '+')
            #win.flip()
    CodeComponent GambleCount
      Code Type = Py
      Begin Routine:
        nGamble=0

        def gamAd():
            global nGamble
            nGamble = nGamble+1
      Each Frame:
        def gamAd():
            global nGamble
            nGamble = nGamble+1

        if resp.keys == 'right':
            gamAd()
      End Routine:
        #trials.addData('nGamble', nGamble)
  Routine preBlock
    TextComponent chooseInst
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please choose which person you would want to receive financial advice from, and then press enter.
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    TextComponent Ad1
      letterHeight = 0.04
      pos = (-0.4, -0.05)
      startVal [time (s)] = 0.0
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      text:
          Advisor 1: (Left Arrow)








        Adelphi University MBA student,
        interning at Chase Bank
    TextComponent Ad2
      letterHeight = 0.04
      pos = (0.4, -0.05)
      startVal [time (s)] = 0.0
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      text:
        Advisor 2: (Right arrow)








        Adelphi University
        undergraduate biology major
    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent Ad1pic
      image = avatar_1.png
      pos = (-.4, -0.06)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent Ad2pic
      image = avatar_2.png
      pos = (.4, -0.06)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        border_right = visual.Circle(win,radius = 0.38, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (0.4, -0.09), opacity = 1, lineWidth = 5.0)
        border_left = visual.Circle(win,radius = 0.38, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (-0.4, -0.09), opacity = 1, lineWidth = 5.0)
      Each Frame:
        if key_resp_3.keys == 'left':
            border_left.autoDraw=True

        if key_resp_3.keys =='right':
            border_right.autoDraw=True

        if chooseInst.status == FINISHED:
            border_right.autoDraw = False
            border_left.autoDraw = False
      End Routine:
        if chooseInst.status == FINISHED:
            border_right.autoDraw = False
            border_left.autoDraw = False
    KeyboardComponent enter
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent readDatasheet
      Code Type = Py
      Begin Routine:
        import pandas as pd

        cond = pd.read_excel('Book1.xlsx')
      End Routine:
        if key_resp_3.keys == 'left':
            text = 'Advisor 1 says:'
            text2 = 'Advisor 1'

        if key_resp_3.keys == 'right':
            text = 'Advisor 2 says:'
            text2 = 'Advisor 2'
  Routine askAd
    TextComponent text_3
      letterHeight = 0.09
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [condition] = Advice.status==STARTED
      text = Y                 N
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    TextComponent ask
      letterHeight = 0.05
      pos = (0, 0.11)
      startVal [time (s)] = 0.0
      stopVal [condition] = Advice.status==STARTED
      text = Would you like to hear advice from your financial advisor?
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    KeyboardComponent response
      allowedKeys = 'y','n'
      forceEndRoutine = False
      startVal [time (s)] = 0
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    CodeComponent code
      Code Type = Py
      Each Frame:
        if response.keys == 'y':
            continueRoutine = True
        if response.keys == 'n':
            continueRoutine = False
      End Routine:
        if response.keys == 'y':
            continueRoutine = True
        if response.keys == 'n':
            continueRoutine = False
    TextComponent Advice
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.08
      pos [set every repeat] = (0, 0)
      startVal [condition] = response.keys=='y'
      stopVal [duration (s)] = 3
      text [set every repeat] = $text + $AdviceVar1
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  Routine ISI
    TextComponent iSi
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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  Routine inst
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        On the following page you will be instructed to choose an advisor.

        Press the space bar when you are ready to proceed.
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Receive_money
    ImageComponent receiveMoneyPicture
      image [set every repeat] = $Amount
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, -0.05)
      size [set every repeat] = (1.5, 1.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent ISI2
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.08
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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Flow
  Routine inst
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine preBlock
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Book1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Choice', 'Pictures\\IA50_G10.bmp'), ('Choice2', 'Pictures\\IA50_G10.bmp'), ('AdviceVar', 'Advisor 1 says:\n\n"Go with the safe option here!"'), ('Amount', 'Pictures\\IA50.bmp'), ('AdviceVar2', 'Advisor 2 says:\n\n"Try your luck and gamble!"'), ('AdviceVar1', '\n\n"Go with the safe option here!"'), ('GambleAdvice', 0), ('Not_GamblePercent', 20)]),
        OrderedDict([('Choice', 'Pictures\\IA50_G20.bmp'), ('Choice2', 'Pictures\\IA50_G20.bmp'), ('AdviceVar', 'Advisor 1 says:\n\n"Let\'s venture and take a risk!"'), ('Amount', 'Pictures\\IA50.bmp'), ('AdviceVar2', 'Advisor 2 says:\n\n"Don\'t gamble for this one."'), ('AdviceVar1', '\n\n"Let\'s venture and take a risk!"'), ('GambleAdvice', 1), ('Not_GamblePercent', 25)]),
        OrderedDict([('Choice', 'Pictures\\IA50_G30.bmp'), ('Choice2', 'Pictures\\IA50_G30.bmp'), ('AdviceVar', 'Advisor 1 says:\n\n"I think you should gamble."'), ('Amount', 'Pictures\\IA50.bmp'), ('AdviceVar2', 'Advisor 2 says:\n\n"Don\'t be tempted to gamble."'), ('AdviceVar1', '\n\n"I think you should gamble."'), ('GambleAdvice', 1), ('Not_GamblePercent', 30)]),
        OrderedDict([('Choice', 'Pictures\\IA50_G40.bmp'), ('Choice2', 'Pictures\\IA50_G40.bmp'), ('AdviceVar', 'Advisor 1 says:\n\n"It would probably be best to play it safe."'), ('Amount', 'Pictures\\IA50.bmp'), ('AdviceVar2', 'Advisor 2 says:\n\n"What\'s life without a little risk?"'), ('AdviceVar1', '\n\n"It would probably be best to play it safe."'), ('GambleAdvice', 0), ('Not_GamblePercent', 35)])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
      Routine ISI
      Routine Receive_money
      Routine trial
      Routine askAd
      Routine Choice2Gain
    LoopTerminator trials
    Routine Feedback
  LoopTerminator trials_2
